PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', '¿Cómo de buen jugador@ te consideras? (0-10)': '', 'age': '', 'sex': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Texas Holdem
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Routines
  Routine trial
    ImageComponent img1
      image [set every repeat] = $Img1
      pos = (-0.3, 0)
      size = (0.3, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    ImageComponent img2
      image [set every repeat] = $Img2
      pos = (0.3, 0)
      size = (0.3, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    RatingScaleComponent rating
      forceEndRoutine = True
      high = 30
      labels = '0', '30'
      low = 0
      pos = 0, -0.7
      scaleDescription = bet (% )
      size = 1.0
      startVal [time (s)] = 0.0
      visualAnalogScale = True
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  Routine Instructions
    TextComponent text
      durationEstim = 10
      font = Calibri
      letterHeight = 0.025
      pos = (-0.25, 0)
      startVal [time (s)] = 0.0
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      text:
        ¡Bienvenido!

        Este juego sirve para puntuarte rápidamente como jugador de Texas Hold'em.

        En Texas Hold'em, se te reparten dos cartas y haces una apuesta inicial sobre ellas.


        A la derecha verás un ejemplo ya hecho de lo que harás:

        Se presentan dos cartas y bajo ellas hay una barra de apuesta.
        Para apostar, se usa una barra que va de 0 a 1.

        0 es tu apuesta mínima
        1 es tu apuesta máxima

        Pulsando en la línea aparece un triángulo (ya representado en el ejemplo de la derecha).
        La apuesta se puede ajustar desplazando el triangulo sobre la barra.
        Para confirmar la apuesta, pulsa el botón "accept?".

        Hay cartas iniciales más buenas que otras, apuesta en consecuencia.


        Vas a hacer un total de 96 apuestas. En total, estarás entre 10-15 minutos si lo haces bien (5-10s por apuesta).
        Por motivos de confidencialidad, te enviaremos la puntación por email.
        Al final te explicaremos cómo.

        Relee estas instrccuiones para asegurarte de que lo entiendes bien.

        Solo cuando lo tengas claro, pulsa "space" para empezar.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    ImageComponent ex1
      image = AS.png
      pos = (0.5, 0)
      size = (0.15, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent ex2
      image = KS.png
      pos = (0.7, 0)
      size = (0.15, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent bet
      image = example_bet.png
      pos = (0.6, -0.3)
      size = (0.35, 0.3)
      startVal [time (s)] = 0.0
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  Routine feedback
    TextComponent text_2
      font = Calibri
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        ¡Muchas gracias por participar!

        Para obtener la puntuación final, envia un mail a

        info@davidbestue.com

        En el mail, escribe el nombre que has usado para hacer experimento.
        También, te rogaríamos que nos facilites tu nombre completo y escribas la siguiente frase:

        "Permito que los resultados puedan ser incluídos de forma TOTALMENTE ANÓNIMA
        en los estudios que se deriven de este experimento"



        Te enviaremos tu puntación y otras métricas tan pronto como sea posible.

        ¡Si crees que lo puedes hacer mejor, no dudes en repetir el experimento!

        ¡Hasta pronto y gracias!

        Para salir, pulsa "space"
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 15
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  Routine trial_2
    ImageComponent img1_2
      image [set every repeat] = $Img1
      pos = (-0.25, 0.1)
      size = (0.3, 0.45)
      startVal [time (s)] = 0.0
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    ImageComponent img2_2
      image [set every repeat] = $Img2
      pos = (0.25, 0.1)
      size = (0.3, 0.45)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = $[1,1,1]
      lineWidth = 0.005
      pos = (0, -0.35)
      shape = rectangle
      size = (0.8, 0.01)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      lineWidth = 0.005
      ori = 90
      pos = (-0.4, -0.35)
      shape = rectangle
      size = (0.1, 0.01)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      lineWidth = 0.0025
      ori = 90
      pos = (0.4, -0.35)
      shape = rectangle
      size = (0.1, 0.01)
      startVal [time (s)] = 0.0
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    TextComponent bet_text
      font = Calibri
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = % bet
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        mouse.setPos(newPos=(0,-0.25))
    TextComponent text_min
      font = Calibri
      letterHeight = 0.04
      pos = (-0.4, -0.25)
      startVal [time (s)] = 0.0
      text = min
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    TextComponent text_max
      font = Calibri
      letterHeight = 0.04
      pos = (0.4, -0.25)
      startVal [time (s)] = 0.0
      text = max
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  Routine Instructions_2
    TextComponent text_3
      durationEstim = 10
      font = Calibri
      letterHeight = 0.025
      pos = (-0.25, 0)
      startVal [time (s)] = 0.0
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      text:
        ¡Bienvenido!

        Este juego sirve para puntuarte rápidamente como jugador de "Poker Texas Hold'em".

        En "Poker Texas Hold'em", se te reparten dos cartas y haces una apuesta inicial sobre ellas.


        A la derecha se muestra un ejemplo de lo que harás:

        Se presentan dos cartas y bajo ellas hay una barra de apuesta.
        Para apostar, se usa una barra que va de min a max.

        min es tu apuesta inicial MÍNIMA (la dos cartas iniciales por la que menos apostarías)
        max es tu apuesta inicial MÁXIMA (la dos cartas iniciales por la que más apostarías)

        La apuesta se hace pulsando en la línea.

        Hay cartas iniciales más buenas que otras, apuesta en consecuencia.


        Vas a hacer un total de 96 apuestas. En total, estarás entre 10-15 minutos si lo haces bien (5-10s por apuesta).
        Por motivos de confidencialidad, te enviaremos la puntación por email.
        Al final te explicaremos cómo.

        Relee estas instrccuiones para asegurarte de que lo entiendes bien.

        Solo cuando lo tengas claro, pulsa "space" para empezar.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    ImageComponent ex1_2
      image = AS.png
      pos = (0.5, 0)
      size = (0.15, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent ex2_2
      image = KS.png
      pos = (0.7, 0)
      size = (0.15, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent bet_2
      image = example_bet2.png
      pos = (0.6, -0.3)
      size = (0.35, 0.3)
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Trials_.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Img1', 'QD_f.png'), ('Img2', 'JD_f.png')]),
      OrderedDict([('Img1', 'KC_f.png'), ('Img2', '8C.png')]),
      OrderedDict([('Img1', 'KC_f.png'), ('Img2', 'QD_f.png')]),
      OrderedDict([('Img1', 'KH.png'), ('Img2', 'KD.png')]),
      OrderedDict([('Img1', 'JH_f.png'), ('Img2', 'AH.png')]),
      OrderedDict([('Img1', 'JC.png'), ('Img2', '5C.png')]),
      OrderedDict([('Img1', 'KC_f.png'), ('Img2', '5D.png')]),
      OrderedDict([('Img1', 'JD.png'), ('Img2', 'JH.png')]),
      OrderedDict([('Img1', 'QS.png'), ('Img2', 'JH.png')]),
      OrderedDict([('Img1', 'KS_f.png'), ('Img2', '10S.png')]),
      OrderedDict([('Img1', 'QH.png'), ('Img2', '10H.png')]),
      OrderedDict([('Img1', 'KD.png'), ('Img2', '8S.png')]),
      OrderedDict([('Img1', 'QS.png'), ('Img2', 'JS.png')]),
      OrderedDict([('Img1', 'JH.png'), ('Img2', '8S.png')]),
      OrderedDict([('Img1', 'QS.png'), ('Img2', 'QC.png')]),
      OrderedDict([('Img1', 'KD.png'), ('Img2', 'JD.png')]),
      OrderedDict([('Img1', 'KC_f.png'), ('Img2', 'AC.png')]),
      OrderedDict([('Img1', 'JD_f.png'), ('Img2', '4D.png')]),
      OrderedDict([('Img1', 'QH_f.png'), ('Img2', 'AH.png')]),
      OrderedDict([('Img1', 'KD.png'), ('Img2', '9D.png')]),
      OrderedDict([('Img1', 'KH_f.png'), ('Img2', 'QH_f.png')]),
      OrderedDict([('Img1', 'QD_f.png'), ('Img2', '4C.png')]),
      OrderedDict([('Img1', 'QC.png'), ('Img2', '5S.png')]),
      OrderedDict([('Img1', 'JC.png'), ('Img2', '9H.png')]),
      OrderedDict([('Img1', 'KS_f.png'), ('Img2', 'KC_f.png')]),
      OrderedDict([('Img1', 'KS.png'), ('Img2', 'QS.png')]),
      OrderedDict([('Img1', 'QH_f.png'), ('Img2', '9D.png')])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
    Routine trial_2
  LoopTerminator trials
  Routine feedback
